PsychoPy2experiment version="2020.2.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = road map expt
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Routines
  Routine trial
    ImageComponent map
      image = image/RMT_test_map.jpg
      size = (0.75, 0.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    KeyboardComponent directionResponses
      allowedKeys = 's','k'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      store = all keys
      storeCorrect = True
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  Routine Instructions
    TextComponent instrText
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        This is the map of a city. Suppose one day you go for a walk and follow this path here.

        I’d like for you to tell me, at each corner you come to, whether you turn to the left or turn to the right.

        Press the s and k keys correspondingly:

        s = left
        k = right

        Please do not turn the image or your head as you respond.

        You will only have 20 seconds to respond for the whole path, so you will have to move quickly.
        Do you have any questions?
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Finish
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Finished
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    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine Instructions
  LoopInitiator displayMap loopType="TrialHandler"
    Selected rows = 0
    conditionsFile = road map conditions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('corrAns', 's'), ('directNote', 's = left')]),
      OrderedDict([('corrAns', 's'), ('directNote', 'k = right')]),
      OrderedDict([('corrAns', 'k'), ('directNote', None)]),
      OrderedDict([('corrAns', 'k'), ('directNote', None)]),
      OrderedDict([('corrAns', 's'), ('directNote', None)]),
      OrderedDict([('corrAns', 's'), ('directNote', None)]),
      OrderedDict([('corrAns', 'k'), ('directNote', None)]),
      OrderedDict([('corrAns', 'k'), ('directNote', None)]),
      OrderedDict([('corrAns', 'k'), ('directNote', None)]),
      OrderedDict([('corrAns', 's'), ('directNote', None)]),
      OrderedDict([('corrAns', 'k'), ('directNote', None)]),
      OrderedDict([('corrAns', 's'), ('directNote', None)]),
      OrderedDict([('corrAns', 's'), ('directNote', None)]),
      OrderedDict([('corrAns', 'k'), ('directNote', None)]),
      OrderedDict([('corrAns', 'k'), ('directNote', None)]),
      OrderedDict([('corrAns', 's'), ('directNote', None)]),
      OrderedDict([('corrAns', 's'), ('directNote', None)]),
      OrderedDict([('corrAns', 'k'), ('directNote', None)]),
      OrderedDict([('corrAns', 'k'), ('directNote', None)]),
      OrderedDict([('corrAns', 's'), ('directNote', None)]),
      OrderedDict([('corrAns', 's'), ('directNote', None)]),
      OrderedDict([('corrAns', 's'), ('directNote', None)]),
      OrderedDict([('corrAns', 'k'), ('directNote', None)]),
      OrderedDict([('corrAns', 'k'), ('directNote', None)]),
      OrderedDict([('corrAns', 's'), ('directNote', None)]),
      OrderedDict([('corrAns', 's'), ('directNote', None)]),
      OrderedDict([('corrAns', 's'), ('directNote', None)]),
      OrderedDict([('corrAns', 'k'), ('directNote', None)])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
    Routine trial
  LoopTerminator displayMap
  Routine Finish
